PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1368, 912]
  expName = GPHD
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Routines
  Routine Intro
    TextComponent Welcome
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Hello! This experiment demontrates how to interface your GP eye-tracker with the lovely PsychoPy Builder.  
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent calibrate_GP
      Code Type = Py
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      Begin Experiment:
        #make sure the constraints.py file is in experiment folder
        import os
        import time

        from opengaze import OpenGazeTracker

        # Construct the path to the log file.
        dirname = os.path.dirname(os.path.abspath(__file__))
        fname = os.path.join(dirname, '%s.tsv' % (time.strftime("%Y-%m-%d_%H-%M-%S")))

        # Open the connection to the tracker.
        tracker = OpenGazeTracker(logfile=fname, debug=False)
        time.sleep(1.0)

        # Enable the tracker to send ALL the things.
        tracker.enable_send_counter(True)
        tracker.enable_send_cursor(True)
        tracker.enable_send_eye_left(True)
        tracker.enable_send_eye_right(True)
        tracker.enable_send_pog_best(True)
        tracker.enable_send_pog_fix(True)
        tracker.enable_send_pog_left(True)
        tracker.enable_send_pog_right(True)
        tracker.enable_send_pupil_left(True)
        tracker.enable_send_pupil_right(True)
        tracker.enable_send_time(True)
        tracker.enable_send_time_tick(True)
        tracker.enable_send_user_data(True)
        tracker.enable_send_blink(True)
        tracker.enable_send_pupilmm(True)
        tracker.enable_send_dial(True)
        tracker.enable_send_gsr(True)
        tracker.enable_send_heart_rate(True)
        tracker.enable_send_heart_rate_pulse(True)
        tracker.enable_send_ttl(True)
        tracker.enable_send_user_data(True)
        # Reset the user-defined variable.
        tracker.user_data("0")

        # # # # #
        # CALIBRATION

        # Reset the calibration to its default points.
        tracker.calibrate_reset()

        # Show the calibration screen.
        tracker.calibrate_show(True)

        # Start the calibration.
        tracker.calibrate_start(True)

        # Wait for the calibration result.
        result = None
        while result == None:
            result = tracker.get_calibration_result()
            time.sleep(0.1)

        # Hide the calibration window.
        tracker.calibrate_show(False)
      End Experiment:
        # # # # #
        # CLOSE

        # Close the connection.
        tracker.close()
  Routine text_hi
    TextComponent text_2
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Hi! 
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    CodeComponent code_2
      Code Type = Py
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      Begin Routine:
        # # # # #
        # DATA COLLECTION

        # Start the streaming of data.
        tracker.enable_send_data(True)

        # Log the start.
        tracker.user_data("START_TEXT")
        tracker.user_data("0")
      End Experiment:
        # Stop the streaming of data.
        tracker.enable_send_data(False)

        # # # # #
        # CLOSE

        # Close the connection.
        tracker.close()
      End Routine:
        # Log the end of data collection.
        tracker.user_data("STOP_TEXT")
        tracker.user_data("0")
Flow
  Routine Intro
  Routine text_hi
