PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save hdf5 file = True
  Screen = 1
  Units = height
  Use version = 2021.2.3
  Window size (pixels) = [1920, 1080]
  color = $[1,1,1]
  expName = GPHD
  eyetracker = GazePoint
  gpAddress = 127.0.0.1
  gpPort = 4242
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Routines
  Routine Intro
    TextComponent Welcome
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = Hello! This experiment demontrates how to interface your GP eye-tracker with the lovely PsychoPy Builder.  
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    KeyboardComponent key_resp
      allowedKeys = 'y','n','left','right','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine text_hi
    EyetrackerRecordComponent etRecord
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      syncScreenRefresh = False
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    TextComponent text_2
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Hi! 
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        ioServer.sendMessageEvent(text="message text1")
      End Routine:
        ioServer.sendMessageEvent(text="message text2")
  EyetrackerCalibrationRoutine calibration
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    units = from exp settings
  EyetrackerValidationRoutine validation
    borderColor = black
    borderWidth = 2
    colorSpace = rgb
    cursorFillColor = green
    expandDur = 1
    expandScale = 1.5
    innerBorderColor = black
    innerBorderWidth = 2
    innerFillColor = green
    innerRadius = 0.0035
    movementAnimation = True
    movementDur = 1.0
    outerRadius = 0.01
    progressMode = time
    randomisePos = True
    saveAsImg = False
    showResults = True
    targetDelay = 1.0
    targetDur = 1.5
    targetLayout = NINE_POINTS
    targetPositions = NINE_POINTS
    units = from exp settings
Flow
  EyetrackerCalibrationRoutine calibration
  EyetrackerValidationRoutine validation
  Routine Intro
  Routine text_hi
